# Instrument driver configuration file.
[General settings]

# The name is shown in all the configuration windows
name: Blip analyzer

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Blip_analyzer

# Define that this driver is a signal generator without hardware communication
signal_generator: True

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
[Sampling Rate]
section: Settings
datatype: DOUBLE
set_cmd = sampling_rate
get_cmd = sampling_rate
def_value: 1.8e9
unit: Gs

[Segment Length]
section: Settings
datatype: DOUBLE
set_cmd = segmentlength
get_cmd = segmentlength
def_value: 1

[Trace]
label: Trace
datatype: VECTOR
set_cmd = trace
get_cmd = trace
unit: V
x_name: Samples
show_in_measurement_dlg: True

[Threshold]
label: Threshold
unit: V
set_cmd = threshold
get_cmd = threshold
datatype: DOUBLE
def_value: 1e-6
state_quant: Number of Pulses
state_value_1: 4

[Probability]
label: Probability
unit: %
set_cmd = probability
get_cmd = probability
permission: READ
datatype: DOUBLE

[I_avg]
label: Average current
unit: V
set_cmd = I_avg
get_cmd = I_avg
permission: READ
datatype: DOUBLE

[Search Window 1]
label: Search Window 1
unit: s
datatype: DOUBLE

[Search Window 2]
label: Search Window 2
unit: s
datatype: DOUBLE

[Reference level]
label: Reference level
unit: V
set_cmd = reflevel
get_cmd = reflevel
datatype: DOUBLE